milling:
  mill_polishing:
    - milling:
        application_file: Si-ccs
        hfw: 8.0e-05
        milling_current: 6.0e-11
        patterning_mode: Serial
      imaging:
        dwell_time: 2.0e-06
        hfw: 4.0e-5
        resolution:
          - 3072
          - 2048
      name: Polishing Mill 01
      pattern:
        width: 1.0e-05
        depth: 1.0e-6
        spacing: 8.0e-07
        upper_trench_height: 1.0e-6
        lower_trench_height: 1.0e-6
        time: 10
        cross_section: Rectangle
        name: Trench
      strategy:
        {
          "name": BitmapAdaptivePolishing,
          config:
            {
              align_sem: True,
              gis_max_um: 2,
              gis_min_um: 0.15,
              gis_stop_um: 0,
              max_milling_cycles: 30,
              max_crack_area_um2: 2,
              bitmap_erosion_px: 20,
              bitmap_gaussian_sigma: 5,
              mask_cracks: true,
              model_path: ,
            },
        }
options:
  name: autolamella-adaptive-polish-only
  method: autolamella-on-grid # autolamella-waffle or autolamella-on-grid
  checkpoint: autolamella-mega-20240107.pt
  alignment_attempts: 3
  alignment_at_milling_current: false
  take_final_reference_images: true
  take_final_overview_image: true
  lamella_tilt_angle: -23
  use_fiducial: true
  use_microexpansion: true
  use_notch: false
  supervise:
    trench: false
    undercut: false
    setup_lamella: false
    features: false
    lamella: false
    mill_rough: false
    mill_regular: false
    mill_polishing: false
  high_quality_image:
    dwell_time: 2.0e-06
    enabled: false
    frame_integration: 2
    hfw: 5.0e-05
    resolution:
      - 3072
      - 2048
