name: arctis-adaptive-polish
description: An example protocol for using the adaptive polish strategy with an Arctis. As a minimum, the model path will need to be updated to use this.
version: '1.0'
tasks:
    Rough Milling:
        task_type: MILL_ROUGH
        parameters:
            sync_polishing_position: true
            sync_to_poi: true
            reacquire_alignment_reference: false
        milling:
            mill_rough:
                name: Rough Milling
                field_of_view: 6.0e-05
                channel: ION
                alignment:
                    enabled: true
                    interval_enabled: false
                    interval: 30
                    rect:
                        left: 0.7
                        top: 0.3
                        width: 0.25
                        height: 0.4
                    use_autocontrast: true
                    use_autofocus: false
                    steps: 3
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 1536
                        - 1024
                        dwell_time: 1.0e-06
                        hfw: 0.00015
                        autocontrast: false
                        autogamma: false
                        save: false
                        drift_correction: false
                acquisition:
                    acquire_sem: true
                    acquire_fib: true
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 3072
                        - 2048
                        dwell_time: 5.0e-08
                        hfw: 60.0e-06
                        autocontrast: false
                        autogamma: false
                        save: true
                        frame_integration: 16
                        drift_correction: false
                stages:
                -   name: Microexpansion
                    enabled: true
                    milling:
                        milling_current: 7.4e-10
                        spot_size: 5.0e-08
                        rate: 3.0e-11
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Serial
                        application_file: Si
                        preset: 30 keV; 2.5 nA
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 5.0e-07
                        height: 1.0e-05
                        depth: 1.5e-06
                        distance: 1.2e-05
                        name: MicroExpansion
                    strategy:
                        name: Standard
                        config: {}
                -   name: Rough 1
                    enabled: true
                    milling:
                        milling_current: 7.4e-10
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.1e-05
                        depth: 1.5e-06
                        spacing: 6.0e-06
                        upper_trench_height: 6.0e-06
                        lower_trench_height: 6.0e-06
                        passes: 0
                        cross_section: Rectangle
                        time: 0.0
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: Standard
                        config: {}
                -   name: Rough 2
                    enabled: true
                    milling:
                        milling_current: 7.4e-10
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.1e-05
                        depth: 2.4e-06
                        spacing: 3.0e-06
                        upper_trench_height: 3.0e-06
                        lower_trench_height: 3.0e-06
                        passes: 0
                        cross_section: Rectangle
                        time: 0.0
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: Standard
                        config: {}
        reference_imaging:
            imaging:
                beam_type: ELECTRON
                resolution:
                - 1536
                - 1024
                dwell_time: 1.0e-06
                hfw: 0.00015
                autocontrast: true
                autogamma: false
                save: false
                drift_correction: false
            field_of_view1: 9.999999999999999e-05
            field_of_view2: 0.00015
            acquire_sem: true
            acquire_fib: true
            acquire_image1: true
            acquire_image2: false
    Polishing:
        task_type: MILL_POLISHING
        parameters:
            sync_to_poi: true
        milling:
            mill_polishing:
                name: Polishing
                field_of_view: 60.0e-06
                channel: ION
                alignment:
                    enabled: true
                    interval_enabled: false
                    interval: 30
                    rect:
                        left: 0.7
                        top: 0.3
                        width: 0.25
                        height: 0.4
                    use_autocontrast: true
                    use_autofocus: false
                    steps: 3
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 1536
                        - 1024
                        dwell_time: 1.0e-06
                        hfw: 0.00015
                        autocontrast: false
                        autogamma: false
                        save: false
                        drift_correction: false
                acquisition:
                    acquire_sem: true
                    acquire_fib: true
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 3072
                        - 2048
                        dwell_time: 5.0e-08
                        hfw: 60.0e-06
                        autocontrast: false
                        autogamma: false
                        save: true
                        frame_integration: 16
                        drift_correction: false
                stages:
                -   name: Fine 1
                    enabled: true
                    milling:
                        milling_current: 2.0e-10
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.1e-05
                        depth: 1.4e-06
                        spacing: 1.3e-06
                        upper_trench_height: 1.25e-06
                        lower_trench_height: 1.25e-06
                        passes: 0
                        cross_section: Rectangle
                        time: 0.0
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: Standard
                        config: {}
                -   name: Fine 2
                    enabled: true
                    milling:
                        milling_current: 6.0e-11
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.0e-05
                        depth: 7.5e-07
                        spacing: 6.0e-07
                        upper_trench_height: 5.0e-07
                        lower_trench_height: 5.0e-07
                        passes: 0
                        cross_section: Rectangle
                        time: 0.0
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: Standard
                        config: {}
                -   name: Adaptive Polishing 1
                    enabled: true
                    milling:
                        milling_current: 2.0e-11
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 4.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.0e-05
                        depth: 5.0e-08
                        spacing: 2.0e-07
                        upper_trench_height: 3.5e-07
                        lower_trench_height: 3.5e-07
                        passes: 0
                        cross_section: Rectangle
                        time: 45
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: AdaptivePolishing
                        config:
                            model_path: null
                            model_generation: '1.0'
                            gis_stop_min: 8.0e-07
                            gis_stop_median: 1.0e-06
                            max_crack_area: 1.0e-13
                            max_milling_cycles: 60
                            minimum_lamella_area: 3.0e-11
                            maximum_drift: 7.0e-05
                            align_sem: true
                            save_predictions: true
                            gis_filter_sigma: 1.67
                            lamella_pad_x: 0.0
                            imaging_hfw: 4.0e-05
                -   name: Adaptive Polishing 2
                    enabled: true
                    milling:
                        milling_current: 2.0e-11
                        spot_size: 5.0e-08
                        rate: 0.0001
                        dwell_time: 1.0e-06
                        hfw: 4.0e-05
                        patterning_mode: Parallel
                        application_file: Si
                        preset: ''
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 0.0
                            y: 0.0
                        width: 1.0e-05
                        depth: 5.0e-08
                        spacing: 2.0e-07
                        upper_trench_height: 3.5e-07
                        lower_trench_height: 3.5e-07
                        passes: 0
                        cross_section: Rectangle
                        time: 15
                        fillet: 0.0
                        name: Trench
                    strategy:
                        name: AdaptivePolishing
                        config:
                            model_path: null
                            model_generation: 1.0
                            gis_stop_min: 2.5e-07
                            gis_stop_median: 3.0e-07
                            max_crack_area: 1.0e-13
                            max_milling_cycles: 60
                            minimum_lamella_area: 3.0e-11
                            maximum_drift: 7.0e-05
                            align_sem: true
                            save_predictions: true
                            gis_filter_sigma: 1.6666666666666667
                            lamella_pad_x: 0.0
                            imaging_hfw: 4.0e-05
        reference_imaging:
            imaging:
                beam_type: ELECTRON
                resolution:
                - 1536
                - 1024
                dwell_time: 1.0e-06
                hfw: 0.00015
                autocontrast: true
                autogamma: false
                save: false
                drift_correction: false
            field_of_view1: 9.999999999999999e-05
            field_of_view2: 0.00015
            acquire_sem: true
            acquire_fib: true
            acquire_image1: true
            acquire_image2: false
    Mill Fiducial:
        task_type: MILL_FIDUCIAL
        parameters:
            alignment_expansion: 100.0
            align_to_reference: true
        milling:
            fiducial:
                name: Fiducial
                field_of_view: 6.0e-05
                channel: ION
                alignment:
                    enabled: false
                    interval_enabled: false
                    interval: 30
                    rect:
                        left: 0.7
                        top: 0.3
                        width: 0.25
                        height: 0.4
                    use_autocontrast: true
                    use_autofocus: false
                    steps: 3
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 1536
                        - 1024
                        dwell_time: 1.0e-06
                        hfw: 0.00015
                        autocontrast: false
                        autogamma: false
                        save: false
                        drift_correction: false
                acquisition:
                    acquire_sem: true
                    acquire_fib: true
                    imaging:
                        beam_type: ELECTRON
                        resolution:
                        - 1536
                        - 1024
                        dwell_time: 1.0e-06
                        hfw: 0.00015
                        autocontrast: false
                        autogamma: false
                        save: false
                        drift_correction: false
                stages:
                -   name: Fiducial
                    enabled: true
                    milling:
                        milling_current: 6.0e-11
                        spot_size: 5.0e-08
                        rate: 3.0e-11
                        dwell_time: 1.0e-06
                        hfw: 6.0e-05
                        patterning_mode: Serial
                        application_file: Si
                        preset: 30 keV; 20 nA
                        spacing: 1.0
                        milling_voltage: 30000.0
                        milling_channel: ION
                    pattern:
                        point:
                            x: 2.0e-05
                            y: 0.0
                        width: 8.0e-08
                        height: 1.0e-05
                        depth: 5.0e-07
                        rotation: 45
                        cross_section: Rectangle
                        name: AsymmetricFiducial
                    strategy:
                        name: Standard
                        config: {}
        reference_imaging:
            imaging:
                beam_type: ELECTRON
                resolution:
                - 1536
                - 1024
                dwell_time: 1.0e-06
                hfw: 0.00015
                autocontrast: true
                autogamma: false
                save: false
                drift_correction: false
            field_of_view1: 9.999999999999999e-05
            field_of_view2: 0.00015
            acquire_sem: true
            acquire_fib: true
            acquire_image1: true
            acquire_image2: false
    Setup Lamella Position:
        task_type: SELECT_MILLING_POSITION
        parameters:
            milling_angle: 12.0
            auto_milling_alignment: false
            use_autofocus: false
            select_poi: true
        milling: {}
        reference_imaging:
            imaging:
                beam_type: ELECTRON
                resolution:
                - 1536
                - 1024
                dwell_time: 1.0e-06
                hfw: 0.00015
                autocontrast: true
                autogamma: false
                save: false
                drift_correction: false
            field_of_view1: 0.00015
            field_of_view2: 0.00015
            acquire_sem: true
            acquire_fib: true
            acquire_image1: true
            acquire_image2: false
workflow:
    name: arctis-adaptive-polish
    description: An example protocol for using the adaptive polish strategy with an Arctis. As a minimum, the model path will need to be updated to use this.
    tasks:
    -   name: Setup Lamella Position
        supervise: true
        required: true
        requires: []
    -   name: Mill Fiducial
        supervise: true
        required: true
        requires: []
    -   name: Rough Milling
        supervise: false
        required: true
        requires:
        - Mill Fiducial
    -   name: Polishing
        supervise: false
        required: true
        requires:
        - Rough Milling
options:
    turn_beams_off: false
lamella_defaults:
    use_petname: true
    name_prefix: ''
